[
    {
        "object.className": "ProtImportMovies",
        "object.id": "2",
        "object.label": "pwem - import movies",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "importFrom": 0,
        "filesPath": "./2.outputMovies",
        "filesPattern": "*.tiff",
        "copyFiles": false,
        "haveDataBeenPhaseFlipped": false,
        "acquisitionWizard": null,
        "voltage": 300.0,
        "sphericalAberration": 2.7,
        "amplitudeContrast": 0.1,
        "magnification": 50000,
        "samplingRateMode": 0,
        "samplingRate": 1.0,
        "scannedPixelSize": 7.0,
        "doseInitial": 0.0,
        "dosePerFrame": null,
        "gainFile": "/home/irene/testIrene/gain.mrc",
        "darkFile": null,
        "dataStreaming": false,
        "timeout": 43200,
        "fileTimeout": 30,
        "blacklistDateFrom": null,
        "blacklistDateTo": null,
        "useRegexps": true,
        "blacklistFile": null,
        "inputIndividualFrames": false,
        "numberOfIndividualFrames": null,
        "stackFrames": false,
        "writeMoviesInProject": false,
        "movieSuffix": "_frames.mrcs",
        "deleteFrames": false,
        "output": [
            {
                "outputName": "2.outputMovies",
                "outputType": "SetOfMovies",
                "outputSize": 3,
                "outputItems": [
                    {
                        "_index": "0",
                        "_filename": "Runs/000002_ProtImportMovies/extra/190117_02_00001_UnderDefocus0.7um_frameImage(anothercopy).tiff",
                        "_samplingRate": "1.0",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_micName": "190117_02_00001_UnderDefocus0.7um_frameImage(anothercopy).tiff",
                        "_framesRange": "[1-50] starts: 1",
                        "item_id": 1
                    },
                    {
                        "_index": "0",
                        "_filename": "Runs/000002_ProtImportMovies/extra/190117_02_00001_UnderDefocus0.7um_frameImage(copy).tiff",
                        "_samplingRate": "1.0",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_micName": "190117_02_00001_UnderDefocus0.7um_frameImage(copy).tiff",
                        "_framesRange": "[1-50] starts: 1",
                        "item_id": 2
                    },
                    {
                        "_index": "0",
                        "_filename": "Runs/000002_ProtImportMovies/extra/190117_02_00001_UnderDefocus0.7um_frameImage.tiff",
                        "_samplingRate": "1.0",
                        "_acquisition": "\n    mag=50000.0\n    volt= 300.0\n    Cs=2.7\n    Q0=0.1\n\n",
                        "_micName": "190117_02_00001_UnderDefocus0.7um_frameImage.tiff",
                        "_framesRange": "[1-50] starts: 1",
                        "item_id": 3,
                        "item_representation": "Runs/000087_EmpiarDepositor/extra/topFolder/images_representation/2.outputMovies_0_190117_02_00001_UnderDefocus0.7um_frameImage.jpg"
                    }
                ]
            }
        ],
        "summary": "*3* Movies imported from /home/irene/testIrene/*.tiffIs the data phase flipped : FalseSampling rate : *1.00* \u212b/pxOutput: SetOfMovies (3 items, 3710 x 3838 x 50 [1-50], 1.00 \u212b/px)",
        "log": "Runs/000087_EmpiarDepositor/extra/topFolder/images_representation/2_ProtImportMovies.log",
        "plugin": "pwem",
        "pluginVersion": "3.0.12"
    },
    {
        "object.className": "EmpiarDepositor",
        "object.id": "87",
        "object.label": "empiar - Empiar deposition",
        "object.comment": "",
        "_useQueue": false,
        "_prerequisites": "",
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "deposit": true,
        "resume": false,
        "submit": false,
        "jsonTemplate": null,
        "entryTopLevel": "topFolder",
        "entryTitle": "testEntryTitleNew",
        "entryAuthor": "S\u00e1nchez, I.",
        "experimentType": 2,
        "releaseDate": 0,
        "citations": null,
        "inputSets": [
            "2.outputMovies"
        ],
        "piFirstName": "Irene",
        "piLastName": "S\u00e1nchez",
        "piOrg": "CNB-CSIC",
        "piEmail": "isanchez@cnb.csic.es",
        "piPost": "28801",
        "piTown": "Madrid",
        "piCountry": "ES",
        "caFirstName": "Irene",
        "caLastName": "S\u00e1nchez",
        "caOrg": "CNB-CSIC",
        "caEmail": "isanchez@cnb.csic.es",
        "caPost": "28801",
        "caTown": "Madrid",
        "caCountry": "ES",
        "ownershipBasedOn": 0,
        "newOwnerId": null,
        "EMDBrefs": null,
        "output": [],
        "summary": "Generated deposition files:- [[/home/irene/ScipionUserData/projects/testK/Runs/000087_EmpiarDepositor/extra/topFolder/workflow.json][Scipion workflow]]- [[Runs/000087_EmpiarDepositor/extra/topFolder/deposition.json][Deposition json]]Input: SetOfMovies (3 items, 3710 x 3838 x 50 [1-50], 1.00 \u212b/px) \n",
        "log": "Runs/000087_EmpiarDepositor/extra/topFolder/images_representation/87_EmpiarDepositor.log",
        "plugin": "empiar",
        "pluginVersion": "3.0.6"
    }
]